PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = -1.0000, -1.0000, -1.0000
  expName = visuospatial
  eyetracker = Pupil Labs
  keyboardBackend = ioHub
  plConfidenceThreshold = 0.6
  plPupilCaptureRecordingEnabled = True
  plPupilRemoteAddress = 127.0.0.1
  plPupilRemotePort = 50020
  plPupilRemoteTimeoutMs = 1000
  plPupillometryOnly = False
  plSurfaceName = psychopy_iohub_surface
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Routines
  Routine Fixation
    PolygonComponent polygon2
      fillColor = white
      lineColor = 1.0000, 1.0000, 1.0000
      shape = regular polygon...
      size = (0.75,0.75)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
      units = cm
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  Routine Distractors
    CodeComponent code_4
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        import numpy as np
        import random


        dfFace = pd.read_csv(r'E:\Visual_Cognition\Lakshita\ImFace.csv')
        dfObject = pd.read_csv(r'E:\Visual_Cognition\Lakshita\ImObject.csv')

        ImFace=dfFace['ImFace'].tolist()
        ImObject=dfObject['ImObject'].tolist()


        #ImFace_concat2=(ImFace+ImHappy)
        #ImObject_concat2=np.stack(ImAngry+ImAngry)


        n = 10
        Face=(random.sample(list(ImFace), n))
        Object=(random.sample(list(ImObject), n))
        print(Face)


        k=20
        main_emotion_array2=(random.sample(Face+Object,k))



        main_array_df=pd.DataFrame({"Stim_images":main_emotion_array2})

        #main_emotion_array_df=pd.DataFrame(main_emotion_array2,main_emotion_array2,columns = ['Emotional_images','Noise_images'])
        main_array_csv=main_array_df.to_csv(r"E:\Visual_Cognition\Lakshita\stim.csv")
    ImageComponent image_2
      image [set every repeat] = $Stim_images
      size = (2, 1.2)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 30
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  Routine Probe
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        dots_probe=[0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]
        dotOpacity_probe=[0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]
        trial_probe=random.randint(0,15)
        dotOpacity_probe[trial_probe]=1
        print("probe",trial_probe)
    PolygonComponent grid
      fillColor = white
      shape = rectangle
      size = (8,8)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq1
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2, 2)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2, 6)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq3
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq4
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq5
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq6
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq7
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq8
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq9
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2, 6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq10
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq11
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq12
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2, -6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq13
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq14
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6, 2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq15
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent sq16
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot1_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[0]
      pos = (2, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot2_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[1]
      pos = (2, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot3_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[2]
      pos = (6, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot4_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[3]
      pos = (6, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot16_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[15]
      pos = (-6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot15_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[14]
      pos = (-6,-2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot14_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[13]
      pos = (-6, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot12_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[11]
      pos = (-2,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot13_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[12]
      pos = (-6,6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot11_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[10]
      pos = (-2, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot9_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[8]
      pos = (-2, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot10_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[9]
      pos = (-2, -2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot8_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[7]
      pos = (6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot7_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[6]
      pos = (6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot6_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[5]
      pos = (2,-2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    PolygonComponent dot5_2
      fillColor = black
      opacity [set every repeat] = dotOpacity_probe[4]
      pos = (6, -2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      units = cm
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    KeyboardComponent key_resp
      allowedKeys = 'y','n'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      store = all keys
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    RegionOfInterestComponent roi_2
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 90
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine Feedback
    CodeComponent code_3
      Code Type = Auto->JS
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      Before Experiment:
        import pandas as pd
        feedback_list=[]
      Begin Routine:
        present= False
        feedback=" "
        for item in (dotStore):
            if(trial_probe==item):
                present= True

        keys = event.getKeys(keyList = ['n','y'])
        print(keys)
        if len(keys)==0:
            feedback="No key response"
        elif keys[0]=='y' and present==True:
            feedback="Correct"
        elif keys[0]=='n' and present==True:
            feedback="Incorrect"
        elif keys[0]=='y' and present==False:
            feedback="Incorrect"
        elif keys[0]=='n' and present==False:
            feedback="Correct"
        else:
            feedback="No response"

        feedback_list.append(feedback)
      End Experiment:
        df1 = pd.DataFrame(feedback_list)
        df2 = pd.DataFrame(trial_load)
        df1.to_csv("feedback.csv")
        df2.to_csv("trial.csv")
        print("f",feedback_list)
        print("t",trial_load)
      End Routine:
        dotStore=[]
        #keys = event.waitKeys(keyList = ['space'])
    TextComponent text
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 1.5
      stopVal [frame N] = 90
      text [set every repeat] = $feedback
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  Routine e_record_start
    EyetrackerRecordComponent eye_recoed_start
      actionType = Start Only
      disabled = True
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine e_record_stop
    EyetrackerRecordComponent etRecord
      actionType = Stop Only
      disabled = True
      stopVal [duration (s)] = 0.0
      syncScreenRefresh = False
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  Routine blank1
    ImageComponent image
      color = 0.2941, -0.6706, -0.6706
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 60
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  Routine Resting
    TextComponent text_2
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 20
      text = Press any key to continue
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    KeyboardComponent key_resp_2
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Resting_1min
    TextComponent text_3
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 60.0
      text = Take a break for 1 minute
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  Routine onset
    PolygonComponent polygon
      fillColor = 1.0000, 1.0000, 1.0000
      lineColor = 1.0000, 1.0000, 1.0000
      shape = regular polygon...
      size = (0.75,0.75)
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 1.0
      units = cm
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  Routine Feedback1
    CodeComponent F1_code
      Code Type = Auto->JS
      disabled = True
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      Before Experiment:
        import pandas as pd
        feedback_list=[]
      Begin Routine:
        keys = event.waitKeys( keyList = ['space'])
    TextComponent F1_text
      disabled = True
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $fb_text
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  Routine low_load
    CodeComponent code_6
      Code Type = Auto->JS
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      Before Experiment:
        import random
        trial_load=[]
      Begin Experiment:
        dotStore = []
      Begin Routine:
        dots=[0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]
        dotOpacity=[0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]
        print("routine")


        if x == 2:
            continueRoutine = False
        else:
            idx = random.randint(0, 15)
            dotOpacity[idx] = 1
            dotStore.append(idx)
      End Routine:
        print("dt",dotStore)
        trial_load.append(x)
        #count1=0
        #for i in trial_load:
            #count1 +=1
        #if count1>10:
            #continueRoutine = False
    PolygonComponent Grid_2
      fillColor = white
      shape = rectangle
      size = (8,8)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square1_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2, 2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square2_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2, 6)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square3_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square4_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square5_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square6_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square7_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square8_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square9_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square10_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square11_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square12_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square13_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square14_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square15_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square16_2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot1a
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[0]
      pos = (2, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot2a
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[1]
      pos = (2, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot3a
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[2]
      pos = (6, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot4a
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[3]
      pos = (6, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot5a
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[4]
      pos = (6, -2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot6a
      fillColor = black
      opacity [set every repeat] = dotOpacity[5]
      pos = (2,-2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot7a
      fillColor = black
      opacity [set every repeat] = dotOpacity[6]
      pos = (6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot8a
      fillColor = black
      opacity [set every repeat] = dotOpacity[7]
      pos = (6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot9a
      fillColor = black
      opacity [set every repeat] = dotOpacity[8]
      pos = (-2, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot10a
      fillColor = black
      opacity [set every repeat] = dotOpacity[9]
      pos = (-2, -2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot11a
      fillColor = black
      opacity [set every repeat] = dotOpacity[10]
      pos = (-2, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot12a
      fillColor = black
      opacity [set every repeat] = dotOpacity[11]
      pos = (-2,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot13a
      fillColor = black
      opacity [set every repeat] = dotOpacity[12]
      pos = (-6,6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot14a
      fillColor = black
      opacity [set every repeat] = dotOpacity[13]
      pos = (-6, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot15a
      fillColor = black
      opacity [set every repeat] = dotOpacity[14]
      pos = (-6,-2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot16a
      fillColor = black
      opacity [set every repeat] = dotOpacity[15]
      pos = (-6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    RegionOfInterestComponent roi_3
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine high_load
    CodeComponent code
      Code Type = Auto->JS
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      Before Experiment:
        import random
        trial_load=[]
      Begin Experiment:
        dotStore = []
      Begin Routine:
        dots=[0,1,2,3,4,5,6,7,8,9,10,11,12,13,14,15]
        dotOpacity=[0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0,0]
        print("routine")
        #if trials.thisN == 0:
        #    x = random.choice([1, 2])
        if x == 2:
            dot_list = random.sample(dots, 2)
            for idx in dot_list:
                dotOpacity[idx] = 1
                dotStore.append(idx)
        else:
            continueRoutine = False
      End Routine:
        print("dt",dotStore)
        trial_load.append(x)
    PolygonComponent Grid
      fillColor = white
      shape = rectangle
      size = (8,8)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square1
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2, 2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square2
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2, 6)
      shape = rectangle
      size = (4, 4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square3
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square4
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square5
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square6
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square7
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (2,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square8
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (6,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square9
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square10
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square11
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square12
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-2,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square13
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square14
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square15
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,-2)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent high_grid_square16
      fillColor = white
      lineColor = -1.0000, -1.0000, -1.0000
      pos = (-6,-6)
      shape = rectangle
      size = (4,4)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot1
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[0]
      pos = (2, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot2
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[1]
      pos = (2, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot3
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[2]
      pos = (6, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot4
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[3]
      pos = (6, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot5
      fillColor = black
      lineColor = 1.0000, 1.0000, 1.0000
      opacity [set every repeat] = dotOpacity[4]
      pos = (6, -2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot6
      fillColor = black
      opacity [set every repeat] = dotOpacity[5]
      pos = (2,-2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot7
      fillColor = black
      opacity [set every repeat] = dotOpacity[6]
      pos = (6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot8
      fillColor = black
      opacity [set every repeat] = dotOpacity[7]
      pos = (6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot9
      fillColor = black
      opacity [set every repeat] = dotOpacity[8]
      pos = (-2, 6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot10
      fillColor = black
      opacity [set every repeat] = dotOpacity[9]
      pos = (-2, -2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot11
      fillColor = black
      opacity [set every repeat] = dotOpacity[10]
      pos = (-2, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot12
      fillColor = black
      opacity [set every repeat] = dotOpacity[11]
      pos = (-2,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot13
      fillColor = black
      opacity [set every repeat] = dotOpacity[12]
      pos = (-6,6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot14
      fillColor = black
      opacity [set every repeat] = dotOpacity[13]
      pos = (-6, 2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot15
      fillColor = black
      opacity [set every repeat] = dotOpacity[14]
      pos = (-6,-2)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    PolygonComponent dot16
      fillColor = black
      opacity [set every repeat] = dotOpacity[15]
      pos = (-6,-6)
      shape = circle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      units = cm
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    RegionOfInterestComponent roi
      anchor = center
      debug = False
      disabled = True
      endRoutineOn = none
      lookDur = 0.1
      nVertices = 4
      ori = 0
      pos = (0, 0)
      save = every look
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 45
      syncScreenRefresh = True
      timeRelativeTo = roi onset
      units = from exp settings
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  Routine randomization
    CodeComponent code_7
      Code Type = Auto->JS
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      Before Experiment:
        import random

        x_values = [1, 1, 1, 1, 1, 1, 1, 1, 1, 1, 2, 2, 2, 2, 2, 2, 2, 2, 2, 2]
        random.shuffle(x_values)
      Begin Routine:
        #print(x_values)

        selected_value = x_values[0]
        x = selected_value
        #print(x)
        x_values.pop(0)
        #print(x_values)
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    disabled = True
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  Routine e_record_start
  LoopInitiator block loopType="TrialHandler"
    conditionsFile = stim.csv
    isTrials = False
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('Stim_images', 'OS/2040.jpg')]),
      OrderedDict([('Stim_images', 'FS/91.png')]),
      OrderedDict([('Stim_images', 'FS/491.png')]),
      OrderedDict([('Stim_images', 'FS/231.png')]),
      OrderedDict([('Stim_images', 'OS/2004.jpg')]),
      OrderedDict([('Stim_images', 'OS/2034.jpg')]),
      OrderedDict([('Stim_images', 'FS/160.png')]),
      OrderedDict([('Stim_images', 'OS/2002.jpg')]),
      OrderedDict([('Stim_images', 'FS/232(1).png')]),
      OrderedDict([('Stim_images', 'OS/2039.jpg')]),
      OrderedDict([('Stim_images', 'FS/253.png')]),
      OrderedDict([('Stim_images', 'FS/331.png')]),
      OrderedDict([('Stim_images', 'FS/613.png')]),
      OrderedDict([('Stim_images', 'OS/2043.jpg')]),
      OrderedDict([('Stim_images', 'FS/460.png')]),
      OrderedDict([('Stim_images', 'OS/2003.jpg')]),
      OrderedDict([('Stim_images', 'FS/81.png')]),
      OrderedDict([('Stim_images', 'OS/2000.jpg')]),
      OrderedDict([('Stim_images', 'OS/2041.jpg')]),
      OrderedDict([('Stim_images', 'OS/2017.jpg')])]
    Routine Feedback1
    Routine onset
    Routine randomization
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine high_load
      Routine low_load
      Routine Fixation
    LoopTerminator trials
    Routine Distractors
    Routine Fixation
    Routine Probe
    Routine Feedback
    Routine blank1
  LoopTerminator block
  Routine Resting_1min
  Routine Resting
  Routine e_record_stop
